<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>BonVision3ScreenRig</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>3840</gl:Width>
                <gl:Height>1024</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>false</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>4</gl:Buffers>
                  <gl:Stereo>true</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
              <Left>-135</Left>
              <Right>135</Right>
              <Bottom>-45</Bottom>
              <Top>45</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
              <FaceSize xsi:nil="true" />
              <ClearColor>Gray</ClearColor>
              <Width xsi:nil="true" />
              <Height xsi:nil="true" />
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>-10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.333</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>-90</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>10</X>
                <Y>0</Y>
                <Z>0</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.666</X>
              <Y>0</Y>
              <Width>0.333</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>PhotodiodeSquare</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.3</ExtentX>
                    <ExtentY>0.3</ExtentY>
                    <LocationX>1.15</LocationX>
                    <LocationY>-0.85</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>PhotodiodeSquare</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeVariables</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Receiver</osc:Name>
                <osc:Port>30000</osc:Port>
                <osc:RemoteHostName />
                <osc:RemotePort>0</osc:RemotePort>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="osc:CreateUdpClient">
                <osc:Name>Emitter</osc:Name>
                <osc:Port>0</osc:Port>
                <osc:RemoteHostName>localhost</osc:RemoteHostName>
                <osc:RemotePort>20000</osc:RemotePort>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT10S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Stop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="osc:ReceiveMessage">
              <osc:Address>/stop</osc:Address>
              <osc:TypeTag>s</osc:TypeTag>
              <osc:Connection>Receiver</osc:Connection>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeLast">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>stop</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="osc:SendMessage">
              <osc:Connection>Emitter</osc:Connection>
              <osc:Address>/stop</osc:Address>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>