<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="io:CreateSerialPort">
            <io:Name>myArduino</io:Name>
            <io:PortName>COM6</io:PortName>
            <io:BaudRate>250000</io:BaudRate>
            <io:Parity>None</io:Parity>
            <io:ParityReplace>63</io:ParityReplace>
            <io:DataBits>8</io:DataBits>
            <io:StopBits>One</io:StopBits>
            <io:Handshake>None</io:Handshake>
            <io:DiscardNull>false</io:DiscardNull>
            <io:DtrEnable>true</io:DtrEnable>
            <io:RtsEnable>false</io:RtsEnable>
            <io:ReadBufferSize>4096</io:ReadBufferSize>
            <io:WriteBufferSize>2048</io:WriteBufferSize>
            <io:ReceivedBytesThreshold>1</io:ReceivedBytesThreshold>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="io:SerialStringRead">
            <io:PortName>myArduino</io:PortName>
            <io:NewLine>\r\n</io:NewLine>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>RewardAmount</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="OpenValveMaxITI" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>10</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>OpenValveMaxITI</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="OpenValveMeanAdd" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>OpenValveMeanAdd</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="OpenValveMinITI" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>OpenValveMinITI</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Double">
        <rx:Name>OpenValveITI</rx:Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SetValveOpenITI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OpenValveMeanAdd</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Rate" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateExponential">
                <p1:Rate>0.2</p1:Rate>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OpenValveMinITI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="SubscribeSubject">
              <Name>OpenValveMaxITI</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Min" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>OpenValveITI</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>ValveITI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialITI</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>MakeTimespan</scr:Name>
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT7.815S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>ITIStartTimestamp</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>ITIStart</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GiveWater</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>C:\Water_calibration\calibration.csv</io:FileName>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>MakeDouble</scr:Name>
              <scr:Description />
              <scr:Expression>Convert.ToDouble(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>43.48</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RewardAmount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>260</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>myArduino</io:PortName>
                <io:NewLine>\r</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>